PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'inputType': 'b', 'time': 'a'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -1.0000, -1.0000, -1.0000
  expName = emoreg
  keyboardBackend = ioHub
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Routines
  Routine instr
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    CodeComponent hide_mouse
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False
      Begin Routine:
        win.mouseVisible = False
    TextboxComponent textbox
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.20)
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"In this task, you will be be shown a series of images followed by faces.\nWhen a face appears on the screen, press the {responseKeys[0][1]} if it is a man and the {responseKeys[1][1]} if it is a woman.\nPress any button to continue."
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    KeyboardComponent end_instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine baseline
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    CodeComponent declarations
      Code Type = Auto->JS
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      Begin Experiment:
        responseKeys=[['b','index finger button'],['y', 'middle finger button']]
        if expInfo['inputType']=='k':
            responseKeys=[['f', 'F key'],['j', 'J key']]

        def getKeyForGender(gender):
            if gender == 'm':
                return responseKeys[0][0]
            return responseKeys[1][0]

        def getFeedbackColor(isCorrect):
            return 'green' if isCorrect else 'red'

        def getFeedbackText(isCorrect):
            return '+ correct +' if isCorrect else 'x wrong x'
    PolygonComponent baseline_fixation
      fillColor = white
      pos = (0, -0.20)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine trial
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    CodeComponent set_img_size
      Code Type = Auto->JS
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      Begin Routine:
        defaultFixPos=[0, -0.20]
    PolygonComponent pre_stim_fix
      fillColor = white
      pos [set every repeat] = defaultFixPos
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent stim
      image [set every repeat] = $stim_path
      pos = (0, -0.25)
      size [set every repeat] = (0.7,None)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4.0
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    PolygonComponent pre_face_fix
      fillColor = white
      pos [set every repeat] = defaultFixPos
      shape = cross
      size = (0.05, 0.05)
      startVal [condition] = $stim.status==FINISHED
      stopVal [duration (s)] = $ISI/1000
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    ImageComponent neutral_face
      image [set every repeat] = $face_path
      pos = (0, -0.15)
      size = (0.6,None)
      startVal [condition] = $pre_face_fix.status==FINISHED
      stopVal [duration (s)] = 0.5
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    KeyboardComponent gender_resp
      allowedKeys [set every repeat] = responseKeys[0][0],responseKeys[1][0]
      forceEndRoutine = False
      startVal [condition] = $neutral_face.status==STARTED
      stopVal [duration (s)] = 2
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  Routine feedback
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    TextboxComponent intertrial_interval
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ITI/1000
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    TextboxComponent feedback_text
      bold = False
      color [set every repeat] = $'yellow' if gender_resp.keys is None else getFeedbackColor(gender_resp.keys[0] == getKeyForGender(face_gender))
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos [set every repeat] = $defaultFixPos
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $'- no input - ' if gender_resp.keys is None else getFeedbackText(gender_resp.keys[0]==getKeyForGender(face_gender))
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Flow
  Routine instr
  Routine baseline
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $slice(0,44) if expInfo['time']=='a' else slice(44,88)
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim_path', './stims/pln_14_b.jpg'), ('face_path', './faces/22.jpg'), ('Valence', 'positive'), ('ITI', 9000), ('ISI', 2117), ('TrialLen', 15617), ('TrialLenSec', 15.617), ('TrialLenSum', 15.617)]),
      OrderedDict([('stim_path', './stims/suf_08_h.jpg'), ('face_path', './faces/36.jpg'), ('Valence', 'negative'), ('ITI', 9000), ('ISI', 2283), ('TrialLen', 15783), ('TrialLenSec', 15.783), ('TrialLenSum', 31.4)]),
      OrderedDict([('stim_path', './stims/pln_06_f.jpg'), ('face_path', './faces/45.jpg'), ('Valence', 'positive'), ('ITI', 9000), ('ISI', 2050), ('TrialLen', 15550), ('TrialLenSec', 15.55), ('TrialLenSum', 46.95)]),
      OrderedDict([('stim_path', './stims/hrm_14_i.jpg'), ('face_path', './faces/33.jpg'), ('Valence', 'negative'), ('ITI', 9000), ('ISI', 2500), ('TrialLen', 16000), ('TrialLenSec', 16.0), ('TrialLenSum', 62.95)]),
      OrderedDict([('stim_path', './stims/suf_05_g.jpg'), ('face_path', './faces/23.jpg'), ('Valence', 'negative'), ('ITI', 9000), ('ISI', 2067), ('TrialLen', 15567), ('TrialLenSec', 15.567), ('TrialLenSum', 78.517)]),
      OrderedDict([('stim_path', './stims/suf_07_d.jpg'), ('face_path', './faces/32.jpg'), ('Valence', 'negative'), ('ITI', 9000), ('ISI', 2983), ('TrialLen', 16483), ('TrialLenSec', 16.483), ('TrialLenSum', 95.0)]),
      OrderedDict([('stim_path', './stims/pls_05_b.jpg'), ('face_path', './faces/37.jpg'), ('Valence', 'positive'), ('ITI', 9000), ('ISI', 2300), ('TrialLen', 15800), ('TrialLenSec', 15.8), ('TrialLenSum', 110.8)])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
    Routine trial
    Routine feedback
  LoopTerminator trials
